PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = kwadracik
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Routines
  Routine trial
    PolygonComponent polygon
      durationEstim = 9
      fillColor = $[1,1,1]
      pos [set every frame] = (corx, cory)
      shape = rectangle
      size = (0.5, 0.5)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = 1
      units = cm
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  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Zobaczysz kwadrat,
        gdy zniknie Twoim zadaniem będzie trzymanie spacji tak długo jak kwadrat
        był na ekranie
Flow
  Routine instr
  LoopInitiator move_it loopType="TrialHandler"
    conditionsFile = kondycje.xlsx
    isTrials = False
    loopType = sequential
    nReps = 662
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    conditions:
      [OrderedDict([('corx', 5.0), ('cory', -5.0)]),
      OrderedDict([('corx', 4.833333333333333), ('cory', -5.0)]),
      OrderedDict([('corx', 4.666666666666666), ('cory', -5.0)]),
      OrderedDict([('corx', 4.499999999999999), ('cory', -5.0)]),
      OrderedDict([('corx', 4.333333333333332), ('cory', -5.0)]),
      OrderedDict([('corx', 4.166666666666665), ('cory', -5.0)]),
      OrderedDict([('corx', 3.999999999999999), ('cory', -5.0)]),
      OrderedDict([('corx', 3.833333333333332), ('cory', -5.0)]),
      OrderedDict([('corx', 3.666666666666666), ('cory', -5.0)]),
      OrderedDict([('corx', 3.499999999999999), ('cory', -5.0)]),
      OrderedDict([('corx', 3.333333333333333), ('cory', -5.0)]),
      OrderedDict([('corx', 3.166666666666666), ('cory', -5.0)]),
      OrderedDict([('corx', 3.0), ('cory', -5.0)]),
      OrderedDict([('corx', 2.833333333333333), ('cory', -5.0)]),
      OrderedDict([('corx', 2.666666666666667), ('cory', -5.0)]),
      OrderedDict([('corx', 2.5), ('cory', -5.0)]),
      OrderedDict([('corx', 2.333333333333333), ('cory', -5.0)]),
      OrderedDict([('corx', 2.166666666666667), ('cory', -5.0)]),
      OrderedDict([('corx', 2.0), ('cory', -5.0)]),
      OrderedDict([('corx', 1.833333333333334), ('cory', -5.0)]),
      OrderedDict([('corx', 1.666666666666667), ('cory', -5.0)]),
      OrderedDict([('corx', 1.5), ('cory', -5.0)]),
      OrderedDict([('corx', 1.333333333333333), ('cory', -5.0)]),
      OrderedDict([('corx', 1.166666666666667), ('cory', -5.0)]),
      OrderedDict([('corx', 1.0), ('cory', -5.0)]),
      OrderedDict([('corx', 0.8333333333333334), ('cory', -5.0)]),
      OrderedDict([('corx', 0.6666666666666667), ('cory', -5.0)])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
    Routine trial
  LoopTerminator move_it
